<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM4</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>20226988</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Slice">
          <rx:Start>0</rx:Start>
          <rx:Step>7</rx:Step>
          <rx:Stop xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>NewThreadScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>62</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>700</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>700</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TargetRadius</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random
import System
from System import Array

# ---------------------------------------------------------------------------
# GridMaze: stores only cell centers (no vertex arrays).
# Hex polygon drawing is removed entirely for performance.
# Cell lookup is now O(1) via axial-coordinate math instead of O(N) loop.
# When n_tiles_per_side == 1, only a single center cell is generated.
# ---------------------------------------------------------------------------
class GridMaze:
    def __init__(self, maze_bounds, n_tiles_per_side, scale_factor):
        self.bounds = maze_bounds
        self.radius = n_tiles_per_side
        self.scale = scale_factor
        self.cells = []

        N = n_tiles_per_side
        w_ratio = maze_bounds[0] / (math.sqrt(3) * (2 * N + 1)) if N &gt; 0 else maze_bounds[0]
        h_ratio = maze_bounds[1] / (1.5 * 2 * N + 2) if N &gt; 0 else maze_bounds[1]
        self.size = min(w_ratio, h_ratio) * scale_factor
        print(self.size)

        self.center_x = maze_bounds[0] / 2.0
        self.center_y = maze_bounds[1] / 2.0

        self._coord_to_idx = {}

        if N == 1:
            # Special case: single center tile only
            self.cells.append({
                'q': 0,
                'r': 0,
                'center': Point(int(self.center_x), int(self.center_y)),
                'center_x': self.center_x,
                'center_y': self.center_y,
            })
            self._coord_to_idx[(0, 0)] = 0
        else:
            for q in range(-N, N + 1):
                for r in range(-N, N + 1):
                    if abs(q + r) &lt;= N:
                        px = self.center_x + self.size * math.sqrt(3) * (q + r / 2.0)
                        py = self.center_y + self.size * 1.5 * r
                        idx = len(self.cells)
                        self.cells.append({
                            'q': q,
                            'r': r,
                            'center': Point(int(px), int(py)),
                            'center_x': px,
                            'center_y': py,
                        })
                        self._coord_to_idx[(q, r)] = idx

        self.viz_radius = int(self.size * 0.45)

    def pixel_to_axial(self, px, py):
        """
        Convert a pixel coordinate to the nearest hex axial (q, r) using
        direct inverse-transform math — O(1), no loop over all cells needed.
        Returns (q, r, cell_index) or (-1, -1, -1) if outside the grid.
        When n_tiles_per_side == 1, always returns the single center cell.
        """
        if self.radius == 1:
            return 0, 0, 0

        dx = px - self.center_x
        dy = py - self.center_y
        s = self.size

        q_frac = (dx * math.sqrt(3) / 3.0 - dy / 3.0) / s
        r_frac = dy * 2.0 / 3.0 / s

        x_frac = q_frac
        z_frac = r_frac
        y_frac = -x_frac - z_frac

        rx = round(x_frac)
        ry = round(y_frac)
        rz = round(z_frac)

        x_diff = abs(rx - x_frac)
        y_diff = abs(ry - y_frac)
        z_diff = abs(rz - z_frac)

        if x_diff &gt; y_diff and x_diff &gt; z_diff:
            rx = -ry - rz
        elif y_diff &gt; z_diff:
            ry = -rx - rz
        else:
            rz = -rx - ry

        q, r = int(rx), int(rz)

        if abs(q) &gt; self.radius or abs(r) &gt; self.radius or abs(q + r) &gt; self.radius:
            return -1, -1, -1

        idx = self._coord_to_idx.get((q, r), -1)
        return q, r, idx


def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]


def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    fill_color = Scalar.All(color[0]) if channels == 1 else Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)
    return img


def build_future_draw_list(target_queue, grid):
    """
    Precompute the list of CV.Circle arguments for all future targets.
    Called only when the queue changes (i.e. on target hits), not every frame.
    Returns a list of (Point, radius, Scalar) tuples.
    """
    draw_list = []
    if not target_queue:
        return draw_list

    cell_counts = {}
    for cell_idx in target_queue:
        cell_counts[cell_idx] = cell_counts.get(cell_idx, 0) + 1

    min_c   = 1
    max_c   = 5
    base_i  = 50
    range_i = 205
    r       = grid.viz_radius
    n_cells = len(grid.cells)

    for cell_idx, count in cell_counts.items():
        if cell_idx &lt; n_cells:
            clamped   = max(min_c, min(count, max_c))
            norm      = (clamped - min_c) / float(max_c - min_c)
            intensity = base_i + int(norm * range_i)
            draw_list.append((grid.cells[cell_idx]['center'], r, Scalar.Rgb(0, intensity, intensity)))

    return draw_list


def draw_targets_fast(active_target, grid, img, future_draw_list):
    """
    Draws future targets from a precomputed draw list (no per-frame looping
    over the queue) then draws the active target on top.
    """
    for center, r, color in future_draw_list:
        CV.Circle(img, center, r, color, -1)

    if active_target is not None and active_target &lt; len(grid.cells):
        CV.Circle(img, grid.cells[active_target]['center'], grid.viz_radius, target_color, -1)


def get_grid_location_fast(grid, centroid_x, centroid_y, active_target, img, target_radius):
    """
    O(1) cell lookup via axial math. Draws a red circle at the mouse cell
    and the target ring/line if a target is active.
    """
    q, r, closest_idx = grid.pixel_to_axial(centroid_x, centroid_y)

    if closest_idx != -1:
        cell = grid.cells[closest_idx]
        CV.Circle(img, cell['center'], grid.viz_radius, mouse_loc_color, 2)

    target_found = False

    if active_target is not None and 0 &lt;= active_target &lt; len(grid.cells):
        target_cell = grid.cells[active_target]
        tx = target_cell['center_x']
        ty = target_cell['center_y']

        dist = math.sqrt((centroid_x - tx) ** 2 + (centroid_y - ty) ** 2)
        distFromCenter = math.sqrt((centroid_x - grid.center_x) ** 2 + (centroid_y - grid.center_y) ** 2)
        

        CV.Circle(img, Point(int(tx), int(ty)), int(target_radius), threshold_color, thickness=4)
        CV.Line(img, Point(int(tx), int(ty)), Point(int(centroid_x), int(centroid_y)), distance_line_color, thickness=3)

        if dist &lt;= target_radius:
            target_found = True

    return q, r, target_found


def generate_targets(n_tiles_per_side, max_targets_per_cell=5, shuffle=True):
    N = n_tiles_per_side

    if N == 1:
        # Single cell: all targets go to cell index 0
        target_queue = [0] * max_targets_per_cell*10  # Arbitrary large number of targets for the single cell
        if shuffle:
            random.shuffle(target_queue)
        base_distribution = [1.0]
        active_target = 0 if target_queue else None
        if target_queue:
            target_queue = target_queue[1:]
        return N, target_queue, base_distribution, active_target

    num_cells = 3 * N * (N + 1) + 1
    base_distribution = [0] * num_cells

    sigma = N / 2.0

    idx = 0
    for q in range(-N, N + 1):
        for r in range(-N, N + 1):
            if abs(q + r) &lt;= N:
                hex_dist = math.sqrt((q + r / 2.0) ** 2 * 3 + (r * 1.5) ** 2)
                prob = math.exp(-0.5 * (hex_dist / sigma) ** 2)
                base_distribution[idx] = prob
                idx += 1

    total_prob = sum(base_distribution)
    base_distribution = [p / float(total_prob) for p in base_distribution]
    max_prob = max(base_distribution)

    target_counts = {}
    target_queue = []

    for i, prob in enumerate(base_distribution):
        scaled = 1 + int((prob / max_prob) * (max_targets_per_cell - 1))
        target_counts[i] = scaled
        for _ in range(scaled):
            target_queue.append(i)

    if shuffle:
        random.shuffle(target_queue)


    active_target = None
    if target_queue:
        active_target = target_queue[0]
        target_queue = target_queue[1:]

    return N, target_queue, base_distribution, active_target


# ---------------------------------------------------------------------------
# Module-level state
# ---------------------------------------------------------------------------

n_tiles_per_side = 8
max_targets_per_cell = 100
scale_factor = 0.5

_, target_queue, target_distribution, active_target = generate_targets(n_tiles_per_side, max_targets_per_cell)

trial_count = 0
reward_left_count = 0
reward_right_count = 0
reward_state = False
click = False
click_start_time = 0.0
last_click_time = 0.0
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False

reward_timeout_duration = 5.0  # seconds animal has to poke after target hit
reward_window_start_time = 0    # timestamp when reward_state became True
failed_trial_count = 0          # incremented on timeout

cached_grid = None
cached_img_dims = None
cached_canvas = None

# Precomputed draw list for draw_targets_fast — rebuilt only when the queue changes.
# Each entry is (center_Point, radius, Scalar_color) ready to pass straight to CV.Circle.
cached_future_draw_list = []
cached_queue_id = None   # id() of the target_queue list at last rebuild

centroid_color = Scalar.Rgb(255, 255, 255)
mouse_loc_color = Scalar.Rgb(255, 0, 0)
target_color = Scalar.Rgb(255, 255, 255)
grid_color = Scalar.Rgb(128, 128, 128)
centroid_radius = 5
threshold_color = Scalar.Rgb(0, 255, 0)
distance_line_color = Scalar.Rgb(255, 255, 0)
black = Scalar.All(0)


@returns(tuple)
def process(value):
    global trial_count, reward_left_count, reward_right_count
    global target_queue, active_target, target_distribution
    global reward_state, click, click_start_time, last_click_time
    global drinking, reward_left, reward_right
    global reward_left_start_time, reward_right_start_time
    global iti_start_time, iti_duration, in_iti
    global withdrawal_start_time, in_withdrawal_period
    global prev_poke_left, prev_poke_right
    global n_tiles_per_side
    global cached_grid, cached_img_dims, cached_canvas
    global cached_future_draw_list, cached_queue_id
    global reward_window_start_time, failed_trial_count

    current_time = time.time()
    reward_duration_left  = 0.039
    reward_duration_right = 0.04
    click_duration        = 0.1
    iti_duration_min      = 1.5
    iti_duration_max      = 2.0
    withdrawal_duration   = 0.5

    target_found_this_frame = False

    time_since_last_click = current_time - click_start_time

    centroid_x, centroid_y, image = (
        value[0].Item1, value[0].Item2, value[0].Item3
    )
    poke_left  = bool(value[1][0])
    poke_right = bool(value[1][1])
    nRewards = reward_left_count + reward_right_count
    target_radius = float(value[1][2])
       
       

    if 0 and nRewards==0:
        target_radius = 350
    elif n_tiles_per_side == 1:
        target_radius = max(100.0, 250.0 - (nRewards * 3))
    elif 0:
        # target_radius = max(target_radius, 250.0 - (nRewards * 3))
        target_radius = max(target_radius, 100.0 - (nRewards * 2))
    elif time_since_last_click &lt; 2*60.0 and target_radius &lt; 300:
        target_radius = 1
    
        


    # ------------------------------------------------------------------
    # Grid / canvas cache: rebuild only when image dimensions change.
    # ------------------------------------------------------------------
    img_dims = get_image_shape(image)
    if img_dims != cached_img_dims:
        cached_grid     = GridMaze(img_dims, n_tiles_per_side, scale_factor)
        cached_img_dims = img_dims
        cached_canvas   = create_blank_canvas(img_dims[0], img_dims[1])
        cached_queue_id = None  # force draw list rebuild on dimension change
    else:
        cached_canvas.Set(black)

    grid   = cached_grid
    canvas = cached_canvas

    # Rebuild the future draw list only when the queue has changed.
    current_queue_id = id(target_queue)
    if current_queue_id != cached_queue_id:
        cached_future_draw_list = build_future_draw_list(target_queue, grid)
        cached_queue_id = current_queue_id

    draw_targets_fast(active_target, grid, canvas, cached_future_draw_list)

    # ------------------------------------------------------------------
    # Mouse position and target detection
    # ------------------------------------------------------------------
    grid_loc_q, grid_loc_r = None, None

    if not (math.isnan(centroid_x) or math.isnan(centroid_y)):
        grid_loc_q, grid_loc_r, target_found_this_frame = get_grid_location_fast(
            grid, centroid_x, centroid_y, active_target, canvas, target_radius
        )
        CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)

        # BUG FIX: guard against re-triggering if we're already in reward state
        # or mid-ITI. Only a clean target hit during the hunt phase counts.
        if target_found_this_frame and active_target is not None and not reward_state and not in_iti and not in_withdrawal_period:
            active_target            = None
            reward_state             = True
            reward_window_start_time = current_time
            click                    = True
            click_start_time         = current_time
            # Queue identity hasn't changed yet (next target comes after ITI),
            # so draw list stays valid showing remaining future targets.

    # ------------------------------------------------------------------
    # State machine: ITI → withdrawal → reward
    # BUG FIX: each branch is strictly exclusive via elif, so reward_state
    # can never process a poke on the same frame a target hit occurred.
    # ------------------------------------------------------------------
    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            trial_count += 1
            in_iti = False
            # BUG FIX: was reading target_queue[0] then separately slicing,
            # which is correct but the cached_queue_id must be invalidated
            # here since target_queue is reassigned via slicing.
            if active_target is None and target_queue:
                active_target   = target_queue[0]
                target_queue    = target_queue[1:]
                cached_queue_id = None  # force draw list rebuild next frame

    elif in_withdrawal_period:
        if not (poke_left or poke_right):
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti               = True
                iti_start_time       = current_time
                iti_duration         = random.uniform(iti_duration_min, iti_duration_max)
        else:
            withdrawal_start_time = current_time

    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration_left:
            reward_left           = False
            in_withdrawal_period  = True
            withdrawal_start_time = current_time
            reward_state          = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration_right:
            reward_right          = False
            in_withdrawal_period  = True
            withdrawal_start_time = current_time
            reward_state          = False
        elif poke_left and not reward_left and not reward_right:
            reward_left            = True
            reward_left_count     += 1
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right           = True
            reward_right_count    += 1
            reward_right_start_time = current_time
        # Only reached on frames AFTER the target-hit frame, since the
        # target-hit block above sets reward_state=True but this elif
        # won't execute until the next call.
        elif current_time - reward_window_start_time &gt;= reward_timeout_duration:
            # Animal did not poke in time — count as failed trial and
            # skip reward delivery, going straight to ITI.
            failed_trial_count += 1
            reward_state        = False
            reward_left         = False
            reward_right        = False
            in_iti              = True
            iti_start_time      = current_time
            iti_duration        = random.uniform(iti_duration_min, iti_duration_max)

    if click and current_time - click_start_time &gt;= click_duration:
        click = False



    prev_poke_left  = poke_left
    prev_poke_right = poke_right
    drinking = reward_state and (poke_left or poke_right)
    total_trials = trial_count + failed_trial_count

    return (canvas, 
            Point(centroid_x, centroid_y), 
            reward_state, 
            reward_left,
            reward_right,
            poke_left, 
            poke_right, 
            drinking, 
            in_iti, 
            click, 
            active_target,
            grid_loc_q, 
            grid_loc_r,
            target_radius, 
            
            failed_trial_count, 
            trial_count, 
            reward_left_count, 
            reward_right_count, 
            tuple(target_distribution))</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time
    reward_state = value[2]

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0 and not reward_state:
        focus_window("clickbait_place_master")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>NewThreadScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Active Target</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str(value[10])</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>TargetRadius</ipy:Name>
        <ipy:Script># Get actual target radius
@returns(float)
def process(value):
  return value[13]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1 as trialCount,
it.Item2 as timeStamp,
it.Item3 as pokeLeft,
it.Item4 as pokeRight,
it.Item5 as activeTarget,
it.Item6 as targetRadius
)
</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_r = str(value.Item1)
  reward_l = str(value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1 as inITI,
it.Item2 as rewardState,
it.Item3 as waterLeft,
it.Item4 as waterRight,
it.Item5 as clickState
)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>NewThreadScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1 as timestamp,
it.Item2 as interval_ms
)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawVideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_raw_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>NewThreadScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
-it.X + 225 as xTrans,
-it.Y + 250 as yTrans

)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Pivot" Selector="Item1" />
          <Property Name="Translation" Selector="Item2.xTrans,Item2.yTrans" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:AffineTransform">
          <cv:Pivot>
            <cv:X>1213.04468</cv:X>
            <cv:Y>537.4152</cv:Y>
          </cv:Pivot>
          <cv:Translation>
            <cv:X>-988.0447</cv:X>
            <cv:Y>-287.415222</cv:Y>
          </cv:Translation>
          <cv:Rotation>0</cv:Rotation>
          <cv:Scale>
            <cv:X>1</cv:X>
            <cv:Y>1</cv:Y>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:RunningAverage">
          <dsp:Alpha>0.15</dsp:Alpha>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Transform" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:WarpAffine">
          <cv:Transform>1,0,-987.2296;0,1,-286.5616</cv:Transform>
          <cv:Flags>Linear</cv:Flags>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>480</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawVideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ffmpeg:VideoWriter">
          <ffmpeg:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_raw.avi</ffmpeg:FileName>
          <ffmpeg:Suffix>None</ffmpeg:Suffix>
          <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
          <ffmpeg:FrameRate>210</ffmpeg:FrameRate>
          <ffmpeg:OutputArguments>-c:v h264_nvenc -rc vbr -cq 23</ffmpeg:OutputArguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Beep</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:DeviceName>Generic Software on Speakers (2- Xonar SoundCard)</al:DeviceName>
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Orientation</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>10</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>10</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowCount">
          <rx:Count>10</rx:Count>
          <rx:Skip>1</rx:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Average" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.Milliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ObserveOn">
          <rx:Scheduler>NewThreadScheduler</rx:Scheduler>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ProcessVelocities</ipy:Name>
        <ipy:Script>import math



minTargetRadius = 1.0
radiusTarget = minTargetRadius
dt = 1.0/30.0
prevAngle = 0

@returns(tuple)
def process(value):
    global radiusTarget
    global minTargetRadius
    global dt
    global prevAngle
    
    # print(value[0])
    # print(value[1])
    da,dx,dy,dt = value[0].Item1,value[0].Item2,value[0].Item3,float(value[0].Item4)/1000
    pokeLeft,pokeRight = bool(value[1][0]),bool(value[1][1])
    
    
    headingAngle = math.atan2(dy, dx)
    yawRate = (headingAngle - prevAngle)/dt
    prevAngle = headingAngle
    

    v = math.hypot(dx, dy)/dt # px/s
    angVel = abs(da)/dt # rad/s
    orbitalRadius = min(v/angVel if angVel &gt; 0 else float(60000), 1000) # px
    # print(v)
    # if v &gt; 500 and 0:
        
    #     targetRadius = max(headingAngle*100, minTargetRadius)
    #     # print(angVel)
    # else: 
    #     targetRadius = minTargetRadius

    threshrange = [2,5]
    metric = angVel
    growthRate = 300.0
    maxRadius = 1000.0
    shrinkRate = 100.0
    vThresh = 100.0
    
    if v &gt; vThresh and abs(metric)&gt;threshrange[0]:
        if radiusTarget &lt; maxRadius:
            radiusTarget += growthRate*dt
    elif pokeLeft or pokeRight:
        radiusTarget = minTargetRadius
    else:
        # radiusTarget = max(minTargetRadius, radiusTarget - 10*dur*(1-(v/300)))
        radiusTarget = min(max(minTargetRadius, radiusTarget-shrinkRate*dt),maxRadius)
    return (radiusTarget,angVel,v,orbitalRadius,headingAngle,yawRate)
</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>DynamicTargetRadius</ipy:Name>
        <ipy:Script># Get target radius

@returns(float)
def process(value):
  return value[0]</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TargetRadius</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>yawRate</ipy:Name>
        <ipy:Script># Get positional velocity

@returns(float)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Velocity</ipy:Name>
        <ipy:Script># Get positional velocity

@returns(float)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>AngularVelocity</ipy:Name>
        <ipy:Script># Get angular velocity

@returns(float)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>OrbitalRadius</ipy:Name>
        <ipy:Script># Get orbit radius

@returns(float)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>HeadingAngle</ipy:Name>
        <ipy:Script>@returns(float)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1 as timestamp,
it.Item2 as centroid,
it.Item3 as velocity,
it.Item4 as angularVelocity,
it.Item5 as orbitalRadius,
it.Item6 as headingAngle
)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>KinematicsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29_kinematicsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ffmpeg:VideoWriter">
          <ffmpeg:FileName>E:\data\clickbait-loco\thermister\2208\a29\06062026_2208_a29.avi</ffmpeg:FileName>
          <ffmpeg:Suffix>None</ffmpeg:Suffix>
          <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
          <ffmpeg:FrameRate>30</ffmpeg:FrameRate>
          <ffmpeg:OutputArguments>-c:v h264_nvenc -rc vbr -cq 23</ffmpeg:OutputArguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:NewThreadScheduler" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>beep-02.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
          <al:SampleRate>0</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth xsi:nil="true" />
          <dsp:Scale>0.6</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Beep</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Monitor Flip</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_raw_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>RawVideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_amplifierdata</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AmplifierDataFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_raw</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>RawVideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.mp4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>MP4</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_kinematicsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>KinematicsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="82" Label="Source1" />
            <Edge From="80" To="82" Label="Source2" />
            <Edge From="81" To="82" Label="Source3" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="91" To="94" Label="Source1" />
            <Edge From="92" To="94" Label="Source2" />
            <Edge From="93" To="94" Label="Source3" />
            <Edge From="94" To="95" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="96" To="97" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="103" To="104" Label="Source1" />
            <Edge From="105" To="106" Label="Source1" />
            <Edge From="107" To="110" Label="Source1" />
            <Edge From="108" To="110" Label="Source2" />
            <Edge From="109" To="110" Label="Source3" />
            <Edge From="110" To="111" Label="Source1" />
            <Edge From="111" To="112" Label="Source1" />
            <Edge From="112" To="113" Label="Source1" />
            <Edge From="113" To="114" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>06062026</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>30</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>2208</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>a29</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Implant Type" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>thermister</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>E:/data/clickbait-loco/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="81" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="91" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="17" Label="Source1" />
      <Edge From="7" To="27" Label="Source1" />
      <Edge From="7" To="123" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="148" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="40" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="40" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="107" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="24" To="92" Label="Source1" />
      <Edge From="24" To="93" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="25" To="113" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="26" To="118" Label="Source1" />
      <Edge From="27" To="28" Label="Source3" />
      <Edge From="27" To="44" Label="Source1" />
      <Edge From="28" To="37" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="36" Label="Source1" />
      <Edge From="31" To="126" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="36" Label="Source2" />
      <Edge From="34" To="126" Label="Source1" />
      <Edge From="35" To="36" Label="Source3" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="42" Label="Source1" />
      <Edge From="38" To="48" Label="Source1" />
      <Edge From="38" To="49" Label="Source1" />
      <Edge From="38" To="51" Label="Source1" />
      <Edge From="38" To="52" Label="Source1" />
      <Edge From="38" To="53" Label="Source1" />
      <Edge From="38" To="54" Label="Source1" />
      <Edge From="38" To="60" Label="Source1" />
      <Edge From="38" To="64" Label="Source1" />
      <Edge From="38" To="66" Label="Source1" />
      <Edge From="38" To="68" Label="Source1" />
      <Edge From="38" To="69" Label="Source1" />
      <Edge From="38" To="75" Label="Source1" />
      <Edge From="38" To="136" Label="Source1" />
      <Edge From="39" To="40" Label="Source3" />
      <Edge From="39" To="62" Label="Source1" />
      <Edge From="39" To="63" Label="Source1" />
      <Edge From="39" To="76" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="55" Label="Source1" />
      <Edge From="48" To="70" Label="Source3" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="55" Label="Source2" />
      <Edge From="51" To="55" Label="Source3" />
      <Edge From="52" To="55" Label="Source4" />
      <Edge From="53" To="55" Label="Source5" />
      <Edge From="54" To="55" Label="Source6" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="76" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="64" To="76" Label="Source3" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="66" To="76" Label="Source4" />
      <Edge From="68" To="70" Label="Source1" />
      <Edge From="69" To="70" Label="Source2" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="74" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source2" />
      <Edge From="75" To="76" Label="Source5" />
      <Edge From="75" To="103" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="80" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source2" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="81" To="84" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="86" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source2" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="90" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="90" Label="Source2" />
      <Edge From="91" To="98" Label="Source1" />
      <Edge From="92" To="93" Label="Source2" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="97" To="98" Label="Source2" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="99" To="102" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="101" To="102" Label="Source2" />
      <Edge From="103" To="104" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="109" To="110" Label="Source1" />
      <Edge From="110" To="111" Label="Source1" />
      <Edge From="111" To="112" Label="Source1" />
      <Edge From="112" To="125" Label="Source1" />
      <Edge From="113" To="114" Label="Source1" />
      <Edge From="114" To="115" Label="Source1" />
      <Edge From="115" To="116" Label="Source1" />
      <Edge From="116" To="117" Label="Source1" />
      <Edge From="117" To="125" Label="Source2" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="119" To="120" Label="Source1" />
      <Edge From="120" To="121" Label="Source1" />
      <Edge From="121" To="122" Label="Source1" />
      <Edge From="122" To="125" Label="Source3" />
      <Edge From="123" To="124" Label="Source1" />
      <Edge From="124" To="125" Label="Source4" />
      <Edge From="125" To="127" Label="Source1" />
      <Edge From="126" To="127" Label="Source2" />
      <Edge From="127" To="128" Label="Source1" />
      <Edge From="128" To="129" Label="Source1" />
      <Edge From="129" To="130" Label="Source1" />
      <Edge From="130" To="131" Label="Source1" />
      <Edge From="130" To="133" Label="Source1" />
      <Edge From="130" To="134" Label="Source1" />
      <Edge From="130" To="137" Label="Source1" />
      <Edge From="130" To="138" Label="Source1" />
      <Edge From="130" To="139" Label="Source1" />
      <Edge From="130" To="140" Label="Source1" />
      <Edge From="131" To="132" Label="Source1" />
      <Edge From="134" To="135" Label="Source1" />
      <Edge From="135" To="141" Label="Source1" />
      <Edge From="136" To="141" Label="Source2" />
      <Edge From="137" To="141" Label="Source3" />
      <Edge From="138" To="141" Label="Source4" />
      <Edge From="139" To="141" Label="Source5" />
      <Edge From="140" To="141" Label="Source6" />
      <Edge From="141" To="142" Label="Source1" />
      <Edge From="142" To="145" Label="Source1" />
      <Edge From="143" To="144" Label="Source1" />
      <Edge From="144" To="145" Label="Source2" />
      <Edge From="146" To="147" Label="Source1" />
      <Edge From="147" To="148" Label="Source2" />
      <Edge From="150" To="151" Label="Source1" />
      <Edge From="151" To="152" Label="Source1" />
      <Edge From="155" To="156" Label="Source1" />
      <Edge From="156" To="157" Label="Source1" />
      <Edge From="158" To="159" Label="Source1" />
      <Edge From="159" To="160" Label="Source1" />
      <Edge From="161" To="162" Label="Source1" />
      <Edge From="162" To="163" Label="Source1" />
      <Edge From="164" To="165" Label="Source1" />
      <Edge From="165" To="166" Label="Source1" />
      <Edge From="167" To="168" Label="Source1" />
      <Edge From="168" To="169" Label="Source1" />
      <Edge From="170" To="171" Label="Source1" />
      <Edge From="171" To="179" Label="Source1" />
      <Edge From="172" To="179" Label="Source2" />
      <Edge From="173" To="179" Label="Source3" />
      <Edge From="174" To="179" Label="Source4" />
      <Edge From="175" To="179" Label="Source5" />
      <Edge From="176" To="179" Label="Source6" />
      <Edge From="177" To="179" Label="Source7" />
      <Edge From="178" To="179" Label="Source8" />
      <Edge From="179" To="180" Label="Source1" />
      <Edge From="180" To="181" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>