<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>20226988</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>44</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>5</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>40</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>flip_state</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(bool)
def process(value):
  return bool(value[-1])</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Flip State</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Active Target</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str(value[10])</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\motivate-test\7011\m0\10042025_7011_m0_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3,Item4,Item5,Item6</io:Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_r = str(value.Item1)
  reward_l = str(value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>D:\clickbait-place\data\motivate-test\7011\m0\10042025_7011_m0_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Flip State</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\motivate-test\7011\m0\10042025_7011_m0_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\clickbait-place\data\motivate-test\7011\m0\10042025_7011_m0.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\motivate-test\7011\m0\10042025_7011_m0_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0:
        focus_window("clickbait_anemo")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C;/ramzy_scripts/test.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Air Flip</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT30M</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(tuple)
def process(value):
    time_period = value.Item1
    session_num = int(value.Item2[1:])

    if session_num % 2 == 0:
      if time_period == 0:
        return (True, False)
      else:
        return (False, True)

    else:
      if time_period == 0:
        return (False, True)
      else:
        return (True, False)</ipy:Script>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Left Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[0]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>48</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Right Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[1]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>49</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>128</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:AnalogOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Monitor Flip</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:CreateWindow">
                  <gl:Width>3840</gl:Width>
                  <gl:Height>1280</gl:Height>
                  <gl:VSync>On</gl:VSync>
                  <gl:SwapSync>false</gl:SwapSync>
                  <gl:ClearColor>White</gl:ClearColor>
                  <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                  <gl:CursorVisible>true</gl:CursorVisible>
                  <gl:Location>
                    <gl:X>3840</gl:X>
                    <gl:Y>0</gl:Y>
                  </gl:Location>
                  <gl:WindowBorder>Hidden</gl:WindowBorder>
                  <gl:WindowState>Normal</gl:WindowState>
                  <gl:DisplayDevice>Primary</gl:DisplayDevice>
                  <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                  <gl:TargetUpdateFrequency xsi:nil="true" />
                  <gl:RenderState />
                  <gl:GraphicsMode>
                    <gl:ColorFormat>
                      <gl:Red>8</gl:Red>
                      <gl:Green>8</gl:Green>
                      <gl:Blue>8</gl:Blue>
                      <gl:Alpha>8</gl:Alpha>
                    </gl:ColorFormat>
                    <gl:Depth>16</gl:Depth>
                    <gl:Stencil>0</gl:Stencil>
                    <gl:Samples>0</gl:Samples>
                    <gl:AccumulatorFormat>
                      <gl:Red>0</gl:Red>
                      <gl:Green>0</gl:Green>
                      <gl:Blue>0</gl:Blue>
                      <gl:Alpha>0</gl:Alpha>
                    </gl:AccumulatorFormat>
                    <gl:Buffers>2</gl:Buffers>
                    <gl:Stereo>false</gl:Stereo>
                  </gl:GraphicsMode>
                </Combinator>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:TextureResources">
                  <gl:Textures>
                    <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                      <gl:Name>stimulus_monitor_2</gl:Name>
                      <gl:Width>1280</gl:Width>
                      <gl:Height>1920</gl:Height>
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>D:\clickbait-place\stimuli\1515_b5_binary_m2.mp4</gl:FileName>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                      <gl:FrameCount xsi:nil="true" />
                      <gl:StartPosition>0</gl:StartPosition>
                      <gl:BufferLength xsi:nil="true" />
                    </gl:TextureConfiguration>
                    <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                      <gl:Name>blank_screen</gl:Name>
                      <gl:Width>1280</gl:Width>
                      <gl:Height>1920</gl:Height>
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>stimuli\blank_white.mp4</gl:FileName>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                      <gl:FrameCount xsi:nil="true" />
                      <gl:StartPosition>0</gl:StartPosition>
                      <gl:BufferLength xsi:nil="true" />
                    </gl:TextureConfiguration>
                  </gl:Textures>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="res:LoadResources" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:RenderFrame" />
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
              <Expression xsi:type="rx:PublishSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Flip State</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Session Number</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="ipy:PythonTransform">
                <ipy:Script>@returns(float)
def process(value):
    flip_state = value.Item1
    if flip_state == 0:
      return -1.5
    else:
      return 1.5</ipy:Script>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="LocationX" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
                <TextureName>stimulus_monitor_2</TextureName>
                <PlaybackRate>0</PlaybackRate>
                <Loop>true</Loop>
                <Angle>0</Angle>
                <ExtentX>2.96</ExtentX>
                <ExtentY>2</ExtentY>
                <LocationX>1.5</LocationX>
                <LocationY>0</LocationY>
                <ScaleX>1</ScaleX>
                <ScaleY>1</ScaleY>
                <ShiftX>0</ShiftX>
                <ShiftY>0</ShiftY>
                <Layer>0</Layer>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="gl:Timer">
                    <gl:DueTime>PT0S</gl:DueTime>
                    <gl:Period>PT5M</gl:Period>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="PropertyMapping">
                  <PropertyMappings>
                    <Property Name="Value" />
                  </PropertyMappings>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="IntProperty">
                    <Value>0</Value>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Mod">
                  <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                    <Value>2</Value>
                  </Operand>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="SubscribeSubject">
                  <Name>Session Number</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:WithLatestFrom" />
                </Builder>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="7" To="13" Label="Source1" />
              <Edge From="8" To="10" Label="Source1" />
              <Edge From="9" To="10" Label="Source2" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source2" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="16" Label="Source1" />
              <Edge From="16" To="17" Label="Source1" />
              <Edge From="17" To="19" Label="Source1" />
              <Edge From="18" To="19" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_amplifierdata</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AmplifierDataFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>10042025</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>20</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>7011</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>m0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Implant Type" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>motivate-test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>D:/clickbait-place/data/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="76" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="15" Label="Source1" />
      <Edge From="4" To="65" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="24" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="25" To="29" Label="Source1" />
      <Edge From="25" To="30" Label="Source1" />
      <Edge From="25" To="32" Label="Source1" />
      <Edge From="25" To="33" Label="Source1" />
      <Edge From="25" To="34" Label="Source1" />
      <Edge From="25" To="35" Label="Source1" />
      <Edge From="25" To="40" Label="Source1" />
      <Edge From="25" To="42" Label="Source1" />
      <Edge From="25" To="45" Label="Source1" />
      <Edge From="25" To="47" Label="Source1" />
      <Edge From="25" To="49" Label="Source1" />
      <Edge From="25" To="51" Label="Source1" />
      <Edge From="25" To="52" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="36" Label="Source1" />
      <Edge From="29" To="53" Label="Source3" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="36" Label="Source2" />
      <Edge From="32" To="36" Label="Source3" />
      <Edge From="33" To="36" Label="Source4" />
      <Edge From="34" To="36" Label="Source5" />
      <Edge From="35" To="36" Label="Source6" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="40" To="59" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="42" To="59" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="59" Label="Source3" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="47" To="59" Label="Source4" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="49" To="59" Label="Source5" />
      <Edge From="51" To="53" Label="Source1" />
      <Edge From="52" To="53" Label="Source2" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="57" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="58" To="59" Label="Source6" />
      <Edge From="59" To="62" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source2" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="70" Label="Source1" />
      <Edge From="67" To="74" Label="Source2" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source2" />
      <Edge From="71" To="73" Label="Source1" />
      <Edge From="72" To="73" Label="Source2" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="104" Label="Source1" />
      <Edge From="97" To="104" Label="Source2" />
      <Edge From="98" To="104" Label="Source3" />
      <Edge From="99" To="104" Label="Source4" />
      <Edge From="100" To="104" Label="Source5" />
      <Edge From="101" To="104" Label="Source6" />
      <Edge From="102" To="104" Label="Source7" />
      <Edge From="103" To="104" Label="Source8" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>