<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>20226988</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Slice">
          <rx:Start>0</rx:Start>
          <rx:Step>3</rx:Step>
          <rx:Stop xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0:
        focus_window("clickbait_place_master")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropPolygon">
            <cv:Regions>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>1295</cv:X>
                  <cv:Y>522</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1019</cv:X>
                  <cv:Y>1019</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>438</cv:X>
                  <cv:Y>1032</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>138</cv:X>
                  <cv:Y>543</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>429</cv:X>
                  <cv:Y>27</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1011</cv:X>
                  <cv:Y>27</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>170</cv:X>
                  <cv:Y>493</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>173</cv:X>
                  <cv:Y>516</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>167</cv:X>
                  <cv:Y>589</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>141</cv:X>
                  <cv:Y>546</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>470</cv:X>
                  <cv:Y>1028</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>441</cv:X>
                  <cv:Y>1032</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>420</cv:X>
                  <cv:Y>1009</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>450</cv:X>
                  <cv:Y>1012</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>1019</cv:X>
                  <cv:Y>1016</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>990</cv:X>
                  <cv:Y>1022</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>997</cv:X>
                  <cv:Y>996</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1036</cv:X>
                  <cv:Y>986</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>1279</cv:X>
                  <cv:Y>495</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1293</cv:X>
                  <cv:Y>522</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1277</cv:X>
                  <cv:Y>538</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1270</cv:X>
                  <cv:Y>501</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>984</cv:X>
                  <cv:Y>29</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1009</cv:X>
                  <cv:Y>31</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>1024</cv:X>
                  <cv:Y>56</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>995</cv:X>
                  <cv:Y>44</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
              <cv:ArrayOfPoint>
                <cv:Point>
                  <cv:X>427</cv:X>
                  <cv:Y>28</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>470</cv:X>
                  <cv:Y>26</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>445</cv:X>
                  <cv:Y>56</cv:Y>
                </cv:Point>
                <cv:Point>
                  <cv:X>412</cv:X>
                  <cv:Y>53</cv:Y>
                </cv:Point>
              </cv:ArrayOfPoint>
            </cv:Regions>
            <cv:MaskType>ToZero</cv:MaskType>
            <cv:FillValue>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>255</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>62</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TargetRadius</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>40</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random
import System
from System import Array

# Class to generate hexagonal maze coordinates
class GridMaze:
    def __init__(self, maze_bounds, grid_radius, scale_factor):
        self.bounds = maze_bounds
        self.radius = grid_radius
        self.cells = []
        
        N = grid_radius
        # Calculate optimal hex size to fit image bounds
        w_ratio = maze_bounds[0] / (math.sqrt(3) * (2 * N + 1)) if N &gt; 0 else maze_bounds[0]
        h_ratio = maze_bounds[1] / (1.5 * 2 * N + 2) if N &gt; 0 else maze_bounds[1]
        self.size = min(w_ratio, h_ratio) * scale_factor   # scale size border margin
        
        center_x = maze_bounds[0] / 2.0
        center_y = maze_bounds[1] / 2.0
        
        # Generate hex grid using axial coordinates (q, r)
        for q in range(-N, N + 1):
            for r in range(-N, N + 1):
                if abs(q + r) &lt;= N:
                    px = center_x + self.size * math.sqrt(3) * (q + r / 2.0)
                    py = center_y + self.size * 1.5 * r
                    
                    # Generate pointy-topped hexagon vertices
                    verts = []
                    for i in range(6):
                        angle_deg = 60 * i - 30
                        angle_rad = math.pi / 180.0 * angle_deg
                        vx = px + self.size * math.cos(angle_rad)
                        vy = py + self.size * math.sin(angle_rad)
                        verts.append(Point(int(vx), int(vy)))
                    
                    arr = Array.CreateInstance(Point, 6)
                    for i, v in enumerate(verts): 
                        arr[i] = v
                    
                    self.cells.append({
                        'q': q,
                        'r': r,
                        'center': Point(int(px), int(py)),
                        'vertices': arr
                    })

def draw_hex_outline(img, vertices, color, thickness):
    for i in range(6):
        CV.Line(img, vertices[i], vertices[(i+1)%6], color, thickness)

def draw_grid(grid, img):
    for cell in grid.cells:
        draw_hex_outline(img, cell['vertices'], grid_color, thickness=2)

def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]

def draw_target_distribution(target_distribution, grid, img, max_intensity=255):
    if sum(target_distribution) &gt; 0:
        max_prob = max(target_distribution)
    else:
        max_prob = 1.0
    
    overlay = create_blank_canvas(img.Size.Width, img.Size.Height)
    
    for i, prob in enumerate(target_distribution):
        if prob &gt; 0 and i &lt; len(grid.cells):
            norm_prob = prob / float(max_prob)
            intensity = int(norm_prob * max_intensity)
            dist_color = Scalar.Rgb(intensity, 0, 0)
            
            cell = grid.cells[i]
            CV.FillConvexPoly(overlay, cell['vertices'], dist_color)
    
    alpha = 0.5
    CV.AddWeighted(img, 1.0, overlay, alpha, 0.0, img)
    
    return img

global initial_cell_counts
global max_initial_count
initial_cell_counts = {}
max_initial_count = 1

def draw_future_targets(target_queue, grid, img):
    all_targets = list(target_queue)

    if not all_targets:
        return img

    overlay = create_blank_canvas(img.Size.Width, img.Size.Height)

    cell_counts = {}
    for cell_idx in all_targets:
        if cell_idx in cell_counts:
            cell_counts[cell_idx] += 1
        else:
            cell_counts[cell_idx] = 1

    min_possible_count = 1
    max_possible_count = 5
    
    base_intensity = 50
    intensity_range = 205
    
    for cell_idx, count in cell_counts.items():
        if cell_idx &lt; len(grid.cells):
            clamped_count = max(min_possible_count, min(count, max_possible_count))
            normalized_position = (clamped_count - min_possible_count) / float(max_possible_count - min_possible_count)
            intensity = base_intensity + int(normalized_position * intensity_range)
            
            target_future_color = Scalar.Rgb(0, intensity, intensity)

            cell = grid.cells[cell_idx]
            CV.FillConvexPoly(overlay, cell['vertices'], target_future_color)

    alpha = 0.5
    CV.AddWeighted(img, 1.0, overlay, alpha, 0.0, img)

    return img

def get_grid_location(grid, centroid_x, centroid_y, active_target, img, target_radius):
    closest_dist = 1000000.0
    closest_idx = -1
    
    for i, cell in enumerate(grid.cells):
        dist = math.sqrt((centroid_x - cell['center'].X)**2 + (centroid_y - cell['center'].Y)**2)
        if dist &lt; closest_dist:
            closest_dist = dist
            closest_idx = i

    q, r = 0, 0
    if closest_idx != -1 and closest_dist &lt;= grid.size:
        cell = grid.cells[closest_idx]
        CV.FillConvexPoly(img, cell['vertices'], mouse_loc_color)
        q = cell['q']
        r = cell['r']
            
    target_found = False
    
    if active_target is not None and 0 &lt;= active_target &lt; len(grid.cells):
        target_cell = grid.cells[active_target]
        center_x = target_cell['center'].X
        center_y = target_cell['center'].Y
        
        dist = math.sqrt((centroid_x - center_x)**2 + (centroid_y - center_y)**2)
        
        CV.Circle(img, Point(int(center_x), int(center_y)), int(target_radius), threshold_color, thickness=4)
        CV.Line(img, Point(int(center_x), int(center_y)), Point(int(centroid_x), int(centroid_y)), distance_line_color, thickness=3)
        
        if dist &lt;= target_radius:
            target_found = True
            
    return q, r, target_found

def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    if channels == 1:
        fill_color = Scalar.All(color[0])
    else:
        fill_color = Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)
    
    return img

def generate_targets(grid_radius, max_targets_per_cell=5, shuffle=True):
    N = grid_radius
    num_cells = 3 * N * (N + 1) + 1
    base_distribution = [0] * num_cells
    
    sigma = N / 2.0 if N &gt; 0 else 1.0
    
    idx = 0
    for q in range(-N, N + 1):
        for r in range(-N, N + 1):
            if abs(q + r) &lt;= N:
                hex_dist = math.sqrt((q + r / 2.0)**2 * 3 + (r * 1.5)**2)
                prob = math.exp(-0.5 * (hex_dist / sigma) ** 2)
                base_distribution[idx] = prob
                idx += 1
    
    total_prob = sum(base_distribution)
    base_distribution = [p / float(total_prob) for p in base_distribution]
    
    max_prob = max(base_distribution)
    
    target_counts = {}
    total_targets = 0
    
    for i, prob in enumerate(base_distribution):
        scaled_targets = 1 + int((prob / max_prob) * (max_targets_per_cell - 1))
        target_counts[i] = scaled_targets
        total_targets += scaled_targets
    
    target_queue = []
    for cell_idx, count in target_counts.items():
        for _ in range(count):
            target_queue.append(cell_idx)
    
    if shuffle:
        random.shuffle(target_queue)

    active_target = None
    if target_queue:
        active_target = target_queue[0]
        target_queue = target_queue[1:]
    
    global initial_cell_counts
    global max_initial_count
    initial_cell_counts = target_counts.copy()
    max_initial_count = max_targets_per_cell
    
    return grid_radius, target_queue, base_distribution, active_target

def draw_targets(active_target, target_queue, grid, img, draw_distribution=False, draw_future=False):
    if draw_distribution:
        img = draw_target_distribution(target_distribution, grid, img)
    
    if draw_future:
        img = draw_future_targets(target_queue, grid, img)
    
    if active_target is not None and active_target &lt; len(grid.cells):
        cell = grid.cells[active_target]
        CV.FillConvexPoly(img, cell['vertices'], target_color)
    
    return img


global grid_radius
global max_targets_per_cell
global scale_factor
grid_radius = 8
max_targets_per_cell = 10
scale_factor = 0.75

global target_queue
global active_target
global target_distribution

_, target_queue, target_distribution, active_target = generate_targets(grid_radius, max_targets_per_cell)

global trial_count
global reward_left_count
global reward_right_count
global reward_state
global click
global click_start_time
global drinking
global reward_left
global reward_right
global reward_left_start_time
global reward_right_start_time

trial_count = 0
reward_left_count = 0
reward_right_count = 0
reward_state = True
click = False
click_start_time = 0
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0

global iti_start_time
global iti_duration
global in_iti
global withdrawal_start_time
global in_withdrawal_period
global prev_poke_left
global prev_poke_right

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False

# Visualization parameters
centroid_color = Scalar.Rgb(255, 255, 255)
mouse_loc_color = Scalar.Rgb(255, 0, 0)
target_color = Scalar.Rgb(255, 255, 255)
grid_color = Scalar.Rgb(128, 128, 128)
centroid_radius = 5
threshold_color = Scalar.Rgb(0, 255, 0)
distance_line_color = Scalar.Rgb(255, 255, 0)

# Caching variables for the grid
global cached_grid
global cached_dims
cached_grid = None
cached_dims = None

@returns(tuple)
def process(value):
    global trial_count
    global reward_left_count
    global reward_right_count
    global target_queue
    global active_target
    global target_distribution
    global reward_state
    global click
    global click_start_time
    global drinking
    global reward_left
    global reward_right
    global reward_left_start_time
    global reward_right_start_time
    global iti_start_time
    global iti_duration
    global in_iti
    global withdrawal_start_time
    global in_withdrawal_period
    global prev_poke_left
    global prev_poke_right
    global grid_radius
    
    # Grid caching globals
    global cached_grid
    global cached_dims

    current_time = time.time()
    reward_duration_left = 0.032
    reward_duration_right = 0.032
    click_duration = 0.1
    iti_duration_min = 1.0
    iti_duration_max = 5.0
    withdrawal_duration = 0.5
    
    target_found_this_frame = False

    centroid_x, centroid_y, image, target_radius = value[0].Item1, value[0].Item2, value[0].Item3, value[0].Item4
    poke_left, poke_right = bool(value[1][0]), bool(value[1][1])
    
    grid_loc_q, grid_loc_r = None, None
    img_dims = get_image_shape(image)
    
    # Only calculate the grid once, or if the camera resolution changes
    if cached_grid is None or cached_dims != img_dims:
        cached_grid = GridMaze(img_dims, grid_radius, scale_factor)
        cached_dims = img_dims
        
    grid = cached_grid
    
    canvas = create_blank_canvas(img_dims[0], img_dims[1])

    draw_targets(active_target, target_queue, grid, canvas, draw_distribution=False, draw_future=True)

    if not (math.isnan(centroid_x) or math.isnan(centroid_y)):
        grid_loc_q, grid_loc_r, target_found_this_frame = get_grid_location(grid, centroid_x, centroid_y, active_target, canvas, target_radius)
        CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)
        
        if target_found_this_frame and active_target is not None and not reward_state:
            active_target = None
            reward_state = True
            click = True
            click_start_time = current_time

    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            trial_count += 1
            in_iti = False
            
            if active_target is None and target_queue:
                active_target = target_queue[0]
                target_queue = target_queue[1:]
            
    elif in_withdrawal_period:
        if not (poke_left or poke_right):
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        else:
            withdrawal_start_time = current_time
            
    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration_left:
            reward_left = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration_right:
            reward_right = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif poke_left and not reward_left and not reward_right:
            reward_left = True
            reward_left_count += 1
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right = True
            reward_right_count += 1
            reward_right_start_time = current_time

    if click and current_time - click_start_time &gt;= click_duration:
        click = False

    prev_poke_left, prev_poke_right = poke_left, poke_right
    drinking = poke_left or poke_right

    return (canvas, Point(centroid_x, centroid_y), reward_state, reward_left, reward_right, 
            poke_left, poke_right, drinking, in_iti, click, active_target, 
            trial_count, reward_left_count, reward_right_count, tuple(target_distribution))</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ColorBalance">
          <cv:Scale>
            <cv:Val0>0.5</cv:Val0>
            <cv:Val1>0.5</cv:Val1>
            <cv:Val2>0.5</cv:Val2>
            <cv:Val3>0.5</cv:Val3>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Active Target</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str(value[10])</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3,Item4,Item5,Item6</io:Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_r = str(value.Item1)
  reward_l = str(value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawVideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>E:\data\clickbait-place\data\test\0001\s1\04062026_0001_s1_raw.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>120</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>1080</cv:Width>
            <cv:Height>720</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Beep</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TargetRadius</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>C:\Users\smear_lab\Downloads\beep-02.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
          <al:SampleRate>0</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Beep</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Monitor Flip</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:CreateWindow">
                  <gl:Width>3840</gl:Width>
                  <gl:Height>1280</gl:Height>
                  <gl:VSync>On</gl:VSync>
                  <gl:SwapSync>false</gl:SwapSync>
                  <gl:ClearColor>Black</gl:ClearColor>
                  <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                  <gl:CursorVisible>true</gl:CursorVisible>
                  <gl:Location>
                    <gl:X>3840</gl:X>
                    <gl:Y>0</gl:Y>
                  </gl:Location>
                  <gl:WindowBorder>Hidden</gl:WindowBorder>
                  <gl:WindowState>Normal</gl:WindowState>
                  <gl:DisplayDevice>Primary</gl:DisplayDevice>
                  <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                  <gl:TargetUpdateFrequency xsi:nil="true" />
                  <gl:RenderState />
                  <gl:GraphicsMode>
                    <gl:ColorFormat>
                      <gl:Red>8</gl:Red>
                      <gl:Green>8</gl:Green>
                      <gl:Blue>8</gl:Blue>
                      <gl:Alpha>8</gl:Alpha>
                    </gl:ColorFormat>
                    <gl:Depth>16</gl:Depth>
                    <gl:Stencil>0</gl:Stencil>
                    <gl:Samples>0</gl:Samples>
                    <gl:AccumulatorFormat>
                      <gl:Red>0</gl:Red>
                      <gl:Green>0</gl:Green>
                      <gl:Blue>0</gl:Blue>
                      <gl:Alpha>0</gl:Alpha>
                    </gl:AccumulatorFormat>
                    <gl:Buffers>2</gl:Buffers>
                    <gl:Stereo>false</gl:Stereo>
                  </gl:GraphicsMode>
                </Combinator>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:TextureResources">
                  <gl:Textures>
                    <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                      <gl:Name>stimulus_monitor_2</gl:Name>
                      <gl:Width>1280</gl:Width>
                      <gl:Height>1920</gl:Height>
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>stimuli\1515_b5_binary_m2.mp4</gl:FileName>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                      <gl:FrameCount xsi:nil="true" />
                      <gl:StartPosition>0</gl:StartPosition>
                      <gl:BufferLength xsi:nil="true" />
                    </gl:TextureConfiguration>
                  </gl:Textures>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="res:LoadResources" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:RenderFrame" />
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
              <Expression xsi:type="rx:PublishSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT0S</gl:DueTime>
                  <gl:Period>PT30M</gl:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Value" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>2</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Mod">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                  <Value>2</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Session Number</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Expression>
              <Expression xsi:type="ipy:PythonTransform">
                <ipy:Script>@returns(float)
def process(value):
    time_period = value.Item1
    session_num = int(value.Item2[1:])

    if session_num % 2 == 0:
      if time_period == 0:
        return 1.5
      else:
        return -1.5

    else:
      if time_period == 0:
        return -1.5
      else:
        return 1.5</ipy:Script>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="LocationX" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
                <TextureName>stimulus_monitor_2</TextureName>
                <PlaybackRate>0</PlaybackRate>
                <Loop>true</Loop>
                <Angle>0</Angle>
                <ExtentX>2.96</ExtentX>
                <ExtentY>2</ExtentY>
                <LocationX>1.5</LocationX>
                <LocationY>0</LocationY>
                <ScaleX>1</ScaleX>
                <ScaleY>1</ScaleY>
                <ShiftX>0</ShiftX>
                <ShiftY>0</ShiftY>
                <Layer>0</Layer>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="7" To="16" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="13" Label="Source1" />
              <Edge From="12" To="13" Label="Source2" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="14" To="15" Label="Source1" />
              <Edge From="15" To="16" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_amplifierdata</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AmplifierDataFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_raw</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>RawVideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="83" To="86" Label="Source1" />
            <Edge From="84" To="86" Label="Source2" />
            <Edge From="85" To="86" Label="Source3" />
            <Edge From="86" To="87" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="90" Label="Source1" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="93" To="94" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>04062026</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>30</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0001</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Implant Type" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>E:/data/clickbait-place/data/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="81" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="7" To="21" Label="Source1" />
      <Edge From="7" To="31" Label="Source1" />
      <Edge From="7" To="86" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="12" To="19" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="33" Label="Source1" />
      <Edge From="30" To="33" Label="Source2" />
      <Edge From="31" To="33" Label="Source3" />
      <Edge From="31" To="44" Label="Source1" />
      <Edge From="32" To="33" Label="Source4" />
      <Edge From="33" To="41" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="40" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="42" To="47" Label="Source1" />
      <Edge From="42" To="48" Label="Source1" />
      <Edge From="42" To="50" Label="Source1" />
      <Edge From="42" To="51" Label="Source1" />
      <Edge From="42" To="52" Label="Source1" />
      <Edge From="42" To="53" Label="Source1" />
      <Edge From="42" To="58" Label="Source1" />
      <Edge From="42" To="60" Label="Source1" />
      <Edge From="42" To="63" Label="Source1" />
      <Edge From="42" To="65" Label="Source1" />
      <Edge From="42" To="67" Label="Source1" />
      <Edge From="42" To="68" Label="Source1" />
      <Edge From="42" To="74" Label="Source1" />
      <Edge From="43" To="45" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="54" Label="Source1" />
      <Edge From="47" To="69" Label="Source3" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="54" Label="Source2" />
      <Edge From="50" To="54" Label="Source3" />
      <Edge From="51" To="54" Label="Source4" />
      <Edge From="52" To="54" Label="Source5" />
      <Edge From="53" To="54" Label="Source6" />
      <Edge From="54" To="57" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="58" To="75" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="62" Label="Source1" />
      <Edge From="60" To="75" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="63" To="75" Label="Source3" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="65" To="75" Label="Source4" />
      <Edge From="67" To="69" Label="Source1" />
      <Edge From="68" To="69" Label="Source2" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="73" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source2" />
      <Edge From="74" To="75" Label="Source5" />
      <Edge From="74" To="82" Label="Source1" />
      <Edge From="75" To="78" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source2" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="81" Label="Source2" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="116" Label="Source1" />
      <Edge From="109" To="116" Label="Source2" />
      <Edge From="110" To="116" Label="Source3" />
      <Edge From="111" To="116" Label="Source4" />
      <Edge From="112" To="116" Label="Source5" />
      <Edge From="113" To="116" Label="Source6" />
      <Edge From="114" To="116" Label="Source7" />
      <Edge From="115" To="116" Label="Source8" />
      <Edge From="116" To="117" Label="Source1" />
      <Edge From="117" To="118" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>