<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>20226988</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>136</cv:X>
                <cv:Y>532</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>439</cv:X>
                <cv:Y>28</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1036</cv:X>
                <cv:Y>36</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1310</cv:X>
                <cv:Y>559</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1020</cv:X>
                <cv:Y>1060</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>432</cv:X>
                <cv:Y>1057</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>test.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>true</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>200</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>